PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3840, 2160]
  color = $[-1,-1,-1]
  expName = maia-reinforcement-learning
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Routines
  Routine instr
    TextComponent text
      letterHeight = 0.05
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = Instructions
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine getready
    TextComponent Ready
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = get ready
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  Routine stimuli
    ImageComponent left
      image [set every repeat] = $stim_left_name
      pos = (-0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    ImageComponent right
      image [set every repeat] = $stim_right_name
      pos = (0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine fixation
    PolygonComponent iti
      fillColor = $[1,1,1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine feedback
    TextComponent feedback_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = A PICTURE OF MONEY
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = orders/scanner/order000.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('kind', 0), ('position', 0), ('result', 1), ('stim_left', 6), ('stim_right', 8), ('stim_left_name', 'stimuli/tunga_06.bmp'), ('stim_right_name', 'stimuli/tunga_08.bmp'), ('correct', 0)]),
      OrderedDict([('kind', 2), ('position', 0), ('result', 1), ('stim_left', 3), ('stim_right', 12), ('stim_left_name', 'stimuli/tunga_03.bmp'), ('stim_right_name', 'stimuli/tunga_12.bmp'), ('correct', 0)]),
      OrderedDict([('kind', 1), ('position', 1), ('result', 1), ('stim_left', 4), ('stim_right', 5), ('stim_left_name', 'stimuli/tunga_04.bmp'), ('stim_right_name', 'stimuli/tunga_05.bmp'), ('correct', 1)]),
      OrderedDict([('kind', 0), ('position', 1), ('result', 1), ('stim_left', 8), ('stim_right', 6), ('stim_left_name', 'stimuli/tunga_08.bmp'), ('stim_right_name', 'stimuli/tunga_06.bmp'), ('correct', 1)]),
      OrderedDict([('kind', 2), ('position', 1), ('result', 1), ('stim_left', 12), ('stim_right', 3), ('stim_left_name', 'stimuli/tunga_12.bmp'), ('stim_right_name', 'stimuli/tunga_03.bmp'), ('correct', 1)]),
      OrderedDict([('kind', 2), ('position', 0), ('result', 1), ('stim_left', 3), ('stim_right', 12), ('stim_left_name', 'stimuli/tunga_03.bmp'), ('stim_right_name', 'stimuli/tunga_12.bmp'), ('correct', 0)]),
      OrderedDict([('kind', 1), ('position', 0), ('result', -1), ('stim_left', 5), ('stim_right', 4), ('stim_left_name', 'stimuli/tunga_05.bmp'), ('stim_right_name', 'stimuli/tunga_04.bmp'), ('correct', 1)])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
    Routine getready
    Routine fixation
    Routine stimuli
    Routine feedback
  LoopTerminator trials
